PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'1', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1920, 1200]
  Full-screen window = True
  expName = sheb_replication_1810
  Screen = 1
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Routines
  Routine end_block
    TextComponent text_6
      text [set every repeat] = u"Slut på del " + `$myBlockCount` + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine display_words
    TextComponent w1
      text [set every repeat] = $word1
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    TextComponent w2
      text [set every repeat] = $word2
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = $SOA
      letterHeight = 0.15
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    TextComponent w3
      text [set every repeat] = $word3
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = $SOA*2
      letterHeight = 0.15
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    TextComponent w4
      text [set every repeat] = $word4
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = $SOA*3
      letterHeight = 0.15
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  Routine instr_exp3
    TextComponent text_10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        u"Du kommer att kunna ta paus i slutet av varje del. Du kan också ta paus mellan de olika omgångarna om du behöver det.\n\nOm du har några frågor så kan du ställa dem till experimentledaren nu." + $cont
    KeyboardComponent key_resp_13
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine init_vars
    CodeComponent code
      Begin Experiment:
        ## Set global variables

        fix_point_duration = 1  # orig = 3

        word_duration = .1  # how long is each word shown for (orig = .1)
        SOA = .5  # stimulus onset asynchrony (orig = .5)

        mem_per = 2 # time during which words have to be kept in memory (orig = 6)

        max_response_time = 30  # max time to repeat words before moving to next trial
        min_response_time = 2  # minimum time before participants can press SPACE to move on
  Routine instr_TryItOut
    TextComponent text_12
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Du kommer nu att få några exempeluppgifter för att öva.

        Om du inte har några frågor, tryck på mellanslag för att påbörja övningen.
    KeyboardComponent key_resp_14
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_16
      text = Instruktion 3 av 3
      pos = (0.8, -0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine fixation
    PolygonComponent point
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.035, 0.05)
      fillColor = $[1,1,1]
      nVertices = 999
      stopVal [duration (s)] = $fix_point_duration
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  Routine instr_exp1
    TextComponent text_8
      text = u"Det funkar så här:\n\nDu kommer att få se fyra ord som visas ett i taget på skärmen. Efter orden följer en paus. Du ska då försöka hålla dessa fyra ord i minnet i samma ordning som de har visats, utan att säga orden. Du kommer sedan att höra ett pip. Direkt efter pipet ska du repetera alla dessa fyra ord högt. Kom ihåg att repetera orden i samma ordning som du såg dem. Din röst kommer att spelas in när du säger orden. För att gå vidare till nästa omgång, tryck på mellanslag." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_11
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_15
      text = Instruktion 2 av 3
      pos = (0.8, -0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine instr_exp2
    TextComponent text_9
      text = u"Nu vet du vad uppgiften går ut på.\n\nSjälva experimentet består av två delar. I varje del kommer du att behöva memorera sekvenser av fyra ord (precis som du nyss har gjort), men under tiden du håller orden i minnet ska du ibland också göra rytmiska rörelser med antingen händerna eller fötterna.\n\nExperimentledaren kommer att ge dig mer detaljerade instruktioner och du kommer att ha gott om tid för att öva in dessa rörelser." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_12
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine block_instr
    CodeComponent code_4
      Begin Routine:
        myBlockCount += 1

        curr_ppt_block = "p_" + `pptID` + "_b" + `myBlockCount`
        print(curr_ppt_block)

        curr_list_training = path2stimuli + curr_ppt_block + '_training.csv'
        print(curr_list_training)

        curr_list_targets = path2stimuli + curr_ppt_block + '_targets.csv'
        print(curr_list_targets)
    TextComponent block_intro
      text [set every repeat] = "Del " + `$myBlockCount` + u"\n\nDu kommer att få se fyra ord som snabbt visas ett i taget på skärmen. Din uppgift är att komma ihåg dem i exakt samma ordning som de har visats.\n\nDen här gången, omedelbart efter det fjärde ordet, kommer du att " + $ShortInstr + u" tills du hör pipet. Direkt efter pipet ska du säga alla de fyra orden högt. Kom ihåg att repetera orden i samma ordning som du såg dem." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_19
      text = Instruktion 1 av 3
      pos = (0.8, -0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine block_instr2
    TextComponent text_2
      text [set every repeat] = "In each trial, you will see four words flashed one after the other, and your task is to memorize them in the order they were presented. Immediately after the fourth word, you will have to " + $BlockInstructions + " until you hear a beep. At the beep, you will have to repeat the four words." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine repeat_words
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0
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    SoundComponent sound_2
      sound = 880
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 0
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  Routine instr_start_real_thing
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Redo?

        Tryck på mellanslag för att starta
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine blank_initialize
    CodeComponent code_5
      Begin Experiment:
        ## Set global (experiment-level) variables

        pptID = int(expInfo['participant'])  # participant ID
        # print("participant ID is " + `pptID`)

        path2stimuli = u'stimuli\\random_lists\\'
        print(path2stimuli)


        import pandas as pd
        df = pd.read_csv(path2stimuli + 'cond-list_assignment_wide.csv')
        # .values accesses the actual values of the row, [0] gets you the first value of that row
        condition_block_file = df.loc[df['id'] == pptID, 'condit_order_file'].values[0]
        print(condition_block_file)


        sess = int(expInfo['session'])  # session converted to int
        print("Session is " + `sess`)

        valid_sessions = [1,9]
        if sess not in valid_sessions:
            sys.exit("ERROR: session number needs to be either 1 or 9 (for speeded version)")



        # count blocks to use in text displays and to load stimulus files
        myBlockCount = 0


        ## Duration-related variables (set here rather than in individ elements)

        # If session = 9, then speed through the screens
        if sess == 9:
            fix_point_duration = .05  # orig = 3
            word_duration = .1  # how long is each word shown for (orig = .1)
            SOA = .15  # stimulus onset asynchrony (orig = .5)
            mem_per = .05 # time during which words have to be kept in memory (orig = 6)
        else:  # otherwise use the standard duration
            fix_point_duration = 3  # orig = 3
            word_duration = .1  # how long is each word shown for (orig = .1)
            SOA = .5  # stimulus onset asynchrony (orig = .5)
            mem_per = 6 # time during which words have to be kept in memory (orig = 6)

        max_response_time = 120  # max time to repeat words before moving to next trial
        min_response_time = 0  # minimum time before participants can press SPACE to move on


        ## Other
        cont = u"\n\nTryck på mellanslag för att fortsätta"  # At the end of instructions slides

        # register midi taps
        import mido
        midi_devices = mido.get_input_names()
        register_taps = False
        def log_pads_device(devicename):
            def log_pads(hit):
                if register_taps:
                    logging.exp('/'.join([
                        str(currentLoop.name),
                        str(myBlockCount),
                        str(currentLoop.thisTrialN),
                        str(devicename),
                        str(hit),
                    ]))
            return log_pads
        port_a = mido.open_input(midi_devices[0], callback=log_pads_device(midi_devices[0]))
        port_b = mido.open_input(midi_devices[1], callback=log_pads_device(midi_devices[1]))
    TextComponent text_14
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_17
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine train
    TextComponent text_4
      text [set every repeat] = u"Du ska nu få öva en stund innan du börjar med uppgiften." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent text_21
      text = Instruktion 3 av 3
      pos = (0.8, -0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine thanks
    TextComponent text
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Nu är experimentet slut.

        Tack för din medverkan!
    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 10
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine get_filename
    CodeComponent code_2
      Begin Experiment:
        curr_ppt_block = "p_" + `pptID` + "_b" + `myBlockCount`
        print(curr_ppt_block)

        curr_list_training = path2stimuli + curr_ppt_block + '_training.csv'
        print(curr_list_training)
  Routine memory_paradiddle
    CodeComponent b_code_7_
      Begin Routine:
        logging.exp('/'.join([
            str(currentLoop.name),
            str(myBlockCount),
            str(currentLoop.thisTrialN),
            'start of memory period',
        ]))
        register_taps = True
      End Routine:
        register_taps = False
    TextComponent b_memory_period_2_
      stopVal [duration (s)] = $mem_per
      startVal [time (s)] = 0
      letterHeight = 0.1
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  Routine block_instr3
    TextComponent text_11
      text [set every repeat] = $LongInstr
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_15
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
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    TextComponent text_20
      text = Instruktion 2 av 3
      pos = (0.8, -0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine instr_welcome
    TextComponent text_7
      text = u"Välkommen till det här experimentet!\n\nI den här uppgiften kommer du att få se fyra ord i en följd och du ska försöka komma ihåg dem. Kort därefter ska du repetera orden i exakt samma ordning." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_10
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_13
      text = Instruktion 1 av 3
      pos = (0.8, -0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine repeat_training
    TextComponent text_5
      text = Om du behöver öva mer, tryck 'm'. Om du känner dig redo att börja med det riktiga experimentet, tryck 'b'.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'b','m'
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      End Routine:
        if key_resp_8.keys == "b": break  # allow to repeat training until ready (max 20, see loop)
Flow
  Routine blank_initialize
  Routine instr_welcome
  Routine instr_exp1
  Routine instr_TryItOut
  LoopInitiator practice_block loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine get_filename
    LoopInitiator word_presentation_practice loopType="TrialHandler"
      conditionsFile = $curr_list_training
      loopType = random
      nReps = 1
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      Routine fixation
      Routine display_words
      Routine memory_paradiddle
      Routine repeat_words
    LoopTerminator word_presentation_practice
    Routine repeat_training
  LoopTerminator practice_block
  Routine instr_exp2
  Routine instr_exp3
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = $condition_block_file
    loopType = sequential
    nReps = 1
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    Routine block_instr
    Routine block_instr3
    Routine train
    LoopInitiator training_block loopType="TrialHandler"
      loopType = random
      nReps = 20
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      LoopInitiator word_presentation_training loopType="TrialHandler"
        conditionsFile = $curr_list_training
        loopType = random
        nReps = 1
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        Routine fixation
        Routine display_words
        Routine memory_paradiddle
        Routine repeat_words
      LoopTerminator word_presentation_training
      Routine repeat_training
    LoopTerminator training_block
    Routine instr_start_real_thing
    LoopInitiator word_presentation loopType="TrialHandler"
      conditionsFile = $curr_list_targets
      loopType = sequential
      nReps = 1
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      Routine fixation
      Routine display_words
      Routine memory_paradiddle
      Routine repeat_words
    LoopTerminator word_presentation
    Routine end_block
  LoopTerminator block
  Routine thanks
