PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = lextale
  Screen = 1
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Routines
  Routine instr_cont4
    TextComponent text_7
      text = "If everything is clear, you can now start the experiment." +$cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_cont1
    TextComponent text_2
      text = "If you are sure that the word exists, even though you don't know its exact meaning, you may still respond \"yes\". But if you are not sure if it is an existing word, you should respond \"no\"." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.5
      store = nothing
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  Routine instr_cont2
    TextComponent text_3
      text = 'In this experiment, we use British English rather than American English spelling. For example: "realise" instead of "realize"; "colour" instead of "color", and so on. Please don\'t let this confuse you. This experiment is not about detecting such subtle spelling differences anyway.' + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.5
      store = nothing
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  Routine instr_cont3
    TextComponent text_4
      text = "You have as much time as you like for each decision. This part of the experiment will take about 5 minutes.\n\nRemember: To indicate your answer, use the key \"y\" for \"yes\" (it is a word) and the key \"n\" for \"no\" (it is not a word)." +$cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.5
      store = nothing
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  Routine end_of_experiment
    TextComponent text_8
      text = This is the end of the test. Thank you for your participation!
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    TextComponent text_5
      text [set every repeat] = $item 
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    KeyboardComponent key_resp_8
      correctAns = $correct_ans
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'y','n'
      startVal [time (s)] = 0.0
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    TextComponent text_9
      text = "y" = yes   "n" = no
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine intro
    CodeComponent code
      Begin Experiment:
        # pptID = int(expInfo['participant'])  # participant ID


        ## other
        cont = "\n\nPress space bar to continue" # At the end of each instruction slide
    TextComponent intro_text
      text = "Welcome and thank you for taking the time to participate!" +$cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.5
      store = nothing
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  Routine blank
    TextComponent text_6
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instr_1
    TextComponent text
      text = 'This test consists of about 60 trials, in each of which you will see a string of letters.Your task is to decide whether this is an existing English word or not. If you think it is an existing English word, you press "y" (for "yes"), and if you think it is not an existing English word, you press "n" (for "no").' + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.5
      store = nothing
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Flow
  Routine intro
  Routine instr_1
  Routine instr_cont1
  Routine instr_cont2
  Routine instr_cont3
  Routine instr_cont4
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = lextale_items.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('item_number_', 0), ('item', u'platery'), ('correct_ans', u'n')]),
      OrderedDict([('item_number_', 0), ('item', u'denial'), ('correct_ans', u'y')]),
      OrderedDict([('item_number_', 0), ('item', u'generic'), ('correct_ans', u'y')]),
      OrderedDict([('item_number_', 1), ('item', u'mensible'), ('correct_ans', u'n')]),
      OrderedDict([('item_number_', 2), ('item', u'scornful'), ('correct_ans', u'y')]),
      OrderedDict([('item_number_', 3), ('item', u'stoutly'), ('correct_ans', u'y')]),
      OrderedDict([('item_number_', 4), ('item', u'ablaze'), ('correct_ans', u'y')]),
      OrderedDict([('item_number_', 5), ('item', u'kermshaw'), ('correct_ans', u'n')]),
      OrderedDict([('item_number_', 6), ('item', u'moonlit'), ('correct_ans', u'y')]),
      OrderedDict([('item_number_', 7), ('item', u'lofty'), ('correct_ans', u'y')]),
      OrderedDict([('item_number_', 8), ('item', u'hurricane'), ('correct_ans', u'y')]),
      OrderedDict([('item_number_', 9), ('item', u'flaw'), ('correct_ans', u'y')]),
      OrderedDict([('item_number_', 10), ('item', u'alberation'), ('correct_ans', u'n')]),
      OrderedDict([('item_number_', 11), ('item', u'unkempt'), ('correct_ans', u'y')]),
      OrderedDict([('item_number_', 12), ('item', u'breeding'), ('correct_ans', u'y')]),
      OrderedDict([('item_number_', 13), ('item', u'festivity'), ('correct_ans', u'y')]),
      OrderedDict([('item_number_', 14), ('item', u'screech'), ('correct_ans', u'y')]),
      OrderedDict([('item_number_', 15), ('item', u'savoury'), ('correct_ans', u'y')])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
    Routine trial
    Routine blank
  LoopTerminator trials
  Routine end_of_experiment
