PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  expName = verb_norming_L1-swe_no_translation
  Screen = 1
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Routines
  Routine Instr_cont1
  Routine beginning_blank
    TextComponent text_11
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine end_of_experiment
    TextComponent text_9
      text = u"Nu är experimentet slut.\n\nTack för att du deltagit!" + $end
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instr_1
    TextComponent text
      text = u"Du kommer att läsa en rad olika svenska verb. För varje verb ska du ange hur mycket du förknippar handlingen som verbet uttrycker med armar/händer och med ben/fötter. Till exempel uttrycker verbet SKRIVA en handling som är starkt förknippad med armar/händer men inte med ben/fötter. Verbet SPARKA å andra sidan uttrycker en handling som starkt förknippas med ben/fötter, men inte med armar/händer."+ $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instr_4
    TextComponent text_4
      text = u"Om du har några frågor kan du ställa dem till experimentledaren nu.\n\nÄr du redo att börja?" +$cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine rating_trial
    TextComponent text_10
      text [set every repeat] = $category + u"\n\nHur starkt förknippar du verbet "+ $word + " med " + $category_lowercase + "?"
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    RatingScaleComponent rating
      labels = 1,7
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
      scaleDescription = Inte alls                                                        Mycket starkt
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  Routine intro
    CodeComponent code
      Begin Experiment:
        pptID = int(expInfo['participant'])  # participant ID

        # alternate between participants whether legs or arms ratings come first
        if pptID % 2 == 0: # if even participant number
            armlegorder_file = 'arm_first_swe.csv'
            firstrating = u"armar/händer"
            secondrating = u"ben/fötter"
        else:
            armlegorder_file = 'leg_first_swe.csv'
            firstrating = u"ben/fötter"
            secondrating = u"armar/händer"

        # trial loop loads a random list for the translation task
        # define its path here
        #path2stimuli = u'..\\stimuli\\presentation_lists_pilot\\p'
        #list_norming_task = path2stimuli + `pptID` + '_norming.csv'

        ## Other
        cont = u"\n\nTryck på mellanslag för att fortsätta"  # At the end of instruction slide
        end = ""  # Needed for final slide
    TextComponent introtext
      text = u"Verbassocieringsuppgift \n\nVälkommen och tack för att du tar dig tid att göra det här experimentet!\nDin uppgift är att rangordna verb enligt två olika skalor."+ $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine blank
    TextComponent short_blank
      stopVal [duration (s)] = .2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine b'blank_long_3'
    TextComponent text_8
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine translation
    TextComponent text_7
      text [set every repeat] = "What does the verb " +$word+ " mean ?\nSay your Swedish translation out loud.\n\n\nPress return to continue" 
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
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  Routine b'blank_long_2'
    TextComponent text_6
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine blank_long
    TextComponent text_5
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instr_2
    TextComponent text_2
      text = u"Du ska bedöma varje verb två gånger. Först ska du ange hur starkt du förknippar det med "+$firstrating + u", och sedan ska du ange hur starkt du förknippar det med "+$secondrating + u". Använd siffertangenterna 1 till 7 för att göra ditt val. När du har bestämt dig trycker du på enter."+$cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instr_3
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        "After the ratings, you will be asked to translate the verb into Swedish. Your voice will be recorded, so simply say the translation out loud. If you don't know the verb, give your best guess.\n\nSome of the words also work as nouns, and mean something else when they are not verbs. Please keep in mind that it is the VERB you should translate. Once you have given your translation, press return to go to the next verb." +$cont
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine beginning_blank
  Routine intro
  Routine instr_1
  Routine instr_2
  Routine instr_4
  Routine blank_long
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = verbs_norming_swe_sept2019_simple.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', u'BADDA')]),
      OrderedDict([('word', u'BANKA')]),
      OrderedDict([('word', u'BINDA')]),
      OrderedDict([('word', u'BORSTA')]),
      OrderedDict([('word', u'BULTA')]),
      OrderedDict([('word', u'DASKA')]),
      OrderedDict([('word', u'DRA')]),
      OrderedDict([('word', u'DUNKA')]),
      OrderedDict([('word', u'F\xc5NGA')]),
      OrderedDict([('word', u'FATTA')]),
      OrderedDict([('word', u'FILA')]),
      OrderedDict([('word', u'FL\xc4TA')]),
      OrderedDict([('word', u'F\xd6SA')]),
      OrderedDict([('word', u'GESTIKULERA')]),
      OrderedDict([('word', u'GNIDA')]),
      OrderedDict([('word', u'GNUGGA')]),
      OrderedDict([('word', u'GRABBA')]),
      OrderedDict([('word', u'GR\xc4VA')]),
      OrderedDict([('word', u'GREPPA')]),
      OrderedDict([('word', u'GRIPA')]),
      OrderedDict([('word', u'HACKA')]),
      OrderedDict([('word', u'HAFFA')]),
      OrderedDict([('word', u'H\xc5VA')]),
      OrderedDict([('word', u'HISSA')]),
      OrderedDict([('word', u'HIVA')]),
      OrderedDict([('word', u'H\xd6JA')]),
      OrderedDict([('word', u'KARVA')]),
      OrderedDict([('word', u'KASTA')]),
      OrderedDict([('word', u'KELA')]),
      OrderedDict([('word', u'KL\xc5')]),
      OrderedDict([('word', u'KL\xc4MMA')]),
      OrderedDict([('word', u'KLAPPA')]),
      OrderedDict([('word', u'KLIA')]),
      OrderedDict([('word', u'KLICKA')]),
      OrderedDict([('word', u'KLIPPA')]),
      OrderedDict([('word', u'KL\xd6SA')]),
      OrderedDict([('word', u'KNACKA')]),
      OrderedDict([('word', u'KNIPA')]),
      OrderedDict([('word', u'KNIVHUGGA')]),
      OrderedDict([('word', u'KNYCKA')]),
      OrderedDict([('word', u'KOPPLA')]),
      OrderedDict([('word', u'KRAMA')]),
      OrderedDict([('word', u'KRATSA')]),
      OrderedDict([('word', u'LINDA')])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
    LoopInitiator armleg_loop loopType="TrialHandler"
      conditionsFile = $armlegorder_file
      loopType = sequential
      nReps = 1
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      Routine rating_trial
      Routine blank
    LoopTerminator armleg_loop
    Routine blank_long
  LoopTerminator trials
  Routine end_of_experiment
