PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  expName = verb_norming_L2-eng_oral_translation
  Screen = 1
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Routines
  Routine Instr_cont1
  Routine end_of_experiment
    TextComponent text_9
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This is the end of this experiment.


        Thank you for participating!
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_1
    TextComponent text
      text = "You will read a series of English verbs. For each word, you will be asked to indicate to what extent you associate the action expressed by the verb with your feet/legs and your hands/arms. For example, the action denoted by the verb WRITE is strongly associated with your hands/arms, but not with your feet/legs. A verb like KICK, on the other hand, denotes an action that is strongly related to your feet/legs but not to your hands/arms." +$cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blank_long
    TextComponent text_5
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine b'blank_long_3'
    TextComponent text_8
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine rating_trial
    TextComponent text_10
      text [set every repeat] = $category + "-relatedness\n\nHow " + $category_lowercase + "-related is the verb " + $word + "?"
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    RatingScaleComponent rating
      labels = 1,7
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
      scaleDescription = Not at all related                                     Strongly related
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  Routine intro
    CodeComponent code
      Begin Experiment:
        pptID = int(expInfo['participant'])  # participant ID

        # alternate between participants whether legs or arms ratings come first
        if pptID % 2 == 0: # if even participant number
            armlegorder_file = 'arm_first.csv'
            firstrating = "hand/arm"
            secondrating = "foot/leg"
        else:
            armlegorder_file = 'leg_first.csv'
            firstrating = "foot/leg"
            secondrating = "hand/arm"

        # trial loop loads a random list for the translation task
        # define its path here
        #path2stimuli = u'..\\stimuli\\presentation_lists_pilot\\p'
        #list_norming_task = path2stimuli + `pptID` + '_norming.csv'

        ## Other
        cont = "\n\nPress space bar to continue"  # At the end of instruction slide
    TextComponent introtext
      text = "Word Association Task \n\nWelcome and thank you for taking the time to participate!\nIn this experiment you will perform two tasks: a rating task and a translation task."+ $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blank
    TextComponent short_blank
      stopVal [duration (s)] = .2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instr_4
    TextComponent text_4
      text = "If you have questions so far, you may ask the experimenter now.\n\nAre you ready to start?" +$cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine translation
    TextComponent text_7
      text [set every repeat] = "What does TO " +$word+ " mean ?\nSay your Swedish translation out loud.\n\n\nPress return to continue" 
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
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  Routine b'blank_long_2'
    TextComponent text_6
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine beginning_blank
    TextComponent text_11
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_2
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        "You will rate each verb twice: once for its " + $firstrating + "-relatedness and once for its " +secondrating+ "-relatedness. Use the number keys 1 to 7 to indicate your rating. Lock in your answer by pressing return."+$cont
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_3
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        "After the ratings, you will be asked to translate the verb into Swedish. Your voice will be recorded, so simply say the translation out loud. If you don't know the verb, give your best guess.\n\nSome of the words also work as nouns, and mean something else when they are not verbs. Please keep in mind that it is the VERB you should translate. Once you have given your translation, press return to go to the next verb." +$cont
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine beginning_blank
  Routine intro
  Routine instr_1
  Routine instr_2
  Routine instr_3
  Routine instr_4
  Routine blank_long
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = verbs_norming_eng_sept2019_simple.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', u'BASH')]),
      OrderedDict([('word', u'BIND')]),
      OrderedDict([('word', u'BRAID')]),
      OrderedDict([('word', u'BRUSH')]),
      OrderedDict([('word', u'CARVE')]),
      OrderedDict([('word', u'CATCH')]),
      OrderedDict([('word', u'CHOP')]),
      OrderedDict([('word', u'CLAP')]),
      OrderedDict([('word', u'CLAW')]),
      OrderedDict([('word', u'CLEAN')]),
      OrderedDict([('word', u'CLICK')]),
      OrderedDict([('word', u'CLUTCH')]),
      OrderedDict([('word', u'CUT')]),
      OrderedDict([('word', u'DIG')]),
      OrderedDict([('word', u'DUNK')]),
      OrderedDict([('word', u'FILE')]),
      OrderedDict([('word', u'FOLD')]),
      OrderedDict([('word', u'GESTURE')]),
      OrderedDict([('word', u'GRAB')]),
      OrderedDict([('word', u'GRASP')]),
      OrderedDict([('word', u'GRATE')]),
      OrderedDict([('word', u'GRIP')]),
      OrderedDict([('word', u'HACK')]),
      OrderedDict([('word', u'HUG')]),
      OrderedDict([('word', u'KNOCK')]),
      OrderedDict([('word', u'LIFT')]),
      OrderedDict([('word', u'NIP')]),
      OrderedDict([('word', u'PAT')]),
      OrderedDict([('word', u'PEEL')]),
      OrderedDict([('word', u'PINCH')]),
      OrderedDict([('word', u'PLUCK')]),
      OrderedDict([('word', u'POKE')]),
      OrderedDict([('word', u'POLISH')]),
      OrderedDict([('word', u'PULL')]),
      OrderedDict([('word', u'PUNCH')]),
      OrderedDict([('word', u'PUSH')]),
      OrderedDict([('word', u'ROW')]),
      OrderedDict([('word', u'RUB')]),
      OrderedDict([('word', u'SCOOP')]),
      OrderedDict([('word', u'SCRAPE')]),
      OrderedDict([('word', u'SCRATCH')]),
      OrderedDict([('word', u'SCRUB')]),
      OrderedDict([('word', u'SEIZE')]),
      OrderedDict([('word', u'SHAKE')]),
      OrderedDict([('word', u'SIGN')]),
      OrderedDict([('word', u'SKIM')])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
    LoopInitiator armleg_loop loopType="TrialHandler"
      conditionsFile = $armlegorder_file
      loopType = sequential
      nReps = 1
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      Routine rating_trial
      Routine blank
    LoopTerminator armleg_loop
    Routine translation
    Routine blank_long
  LoopTerminator trials
  Routine end_of_experiment
