PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = sheb_replic_180522
  Screen = 1
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Routines
  Routine end_block
    TextComponent text_6
      text [set every repeat] = "End of part " + `$myBlockCount` + ".\nYou may take a short break now." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine display_words
    TextComponent w1
      text [set every repeat] = $word1
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent w2
      text [set every repeat] = $word2
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = $SOA
      letterHeight = 0.1
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    TextComponent w3
      text [set every repeat] = $word3
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = $SOA * 2
      letterHeight = 0.1
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    TextComponent w4
      text [set every repeat] = $word4
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = $SOA * 3
      letterHeight = 0.1
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  Routine training
  Routine init_vars
    CodeComponent code
      Begin Experiment:
        ## Set global variables

        fix_point_duration = 1  # orig = 3

        word_duration = .1  # how long is each word shown for (orig = .1)
        SOA = .5  # stimulus onset asynchrony (orig = .5)

        mem_per = 2 # time during which words have to be kept in memory (orig = 6)

        max_response_time = 30  # max time to repeat words before moving to next trial
        min_response_time = 2  # minimum time before participants can press SPACE to move on
  Routine trial
  Routine fixation
    PolygonComponent point
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.035, 0.05)
      fillColor = $[1,1,1]
      nVertices = 999
      stopVal [duration (s)] = $fix_point_duration
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  Routine instr_exp1
    TextComponent text_8
      text = "It works like this:\n\nYou see four words presented on the screen one after another, followed by a pause during which you have to keep the four words in memory in the exact order they were presented. You will then hear a beep. At the beep, you have to repeat the four words out loud. Your voice will be recorded as you repeat the words." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_11
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_exp2
    TextComponent text_9
      text = "The experiment consists of X parts, and you will be able to take a break at the end of each part. You can also take a break between trials if needed.\n\nIf you have questions so far, you may ask the experimenter now." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_12
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine block_instr
    CodeComponent code_4
      Begin Routine:
        myBlockCount += 1

        curr_ppt_block = "p" + `pptID` + "_b" + `myBlockCount`
        print(curr_ppt_block)

        curr_list_training = path2stimuli + curr_ppt_block + '_training.csv'
        print(curr_list_training)

        curr_list_targets = path2stimuli + curr_ppt_block + '_targets.csv'
        print(curr_list_targets)
    TextComponent block_intro
      text [set every repeat] = "Part " + `$myBlockCount` + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine repeat_words
    KeyboardComponent key_resp_2
      stopVal [duration (s)] = $max_response_time
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = $min_response_time
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    SoundComponent sound_2
      sound = 880
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 0
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  Routine instr_start_real_thing
    TextComponent text_3
      text = "Ready?" + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine train
    TextComponent text_4
      text [set every repeat] = "You will first do some practice trials before starting the real task." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent text
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        The experiment is over.

        Thank you for participating!
    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instr_welcome
    CodeComponent code_2
      Begin Experiment:
        ## Set global (experiment-level) variables

        pptID = int(expInfo['participant'])  # participant ID
        print("participant ID is " + `pptID`)

        sess = int(expInfo['session'])  # session converted to int

        myBlockCount = 0  # count blocks to use in text displays

        path2stimuli = u'stimuli\\presentation_lists\\'
        print(path2stimuli)

        ## Duration-related variables (set here rather than in individ elements)

        # If session = 9, then speed through the screens
        if sess == 9:
            fix_point_duration = .05  # orig = 3
        #    word_duration = .1  # how long is each word shown for (orig = .1)
        #    SOA = .15  # stimulus onset asynchrony (orig = .5)
            mem_per = .05 # time during which words have to be kept in memory (orig = 6)
        else:  # otherwise use the standard duration
            fix_point_duration = 3  # orig = 3
        #    word_duration = .2  # how long is each word shown for (orig = .1)
        #    SOA = .5  # stimulus onset asynchrony (orig = .5)
            mem_per = 6 # time during which words have to be kept in memory (orig = 6)

        max_response_time = 120  # max time to repeat words before moving to next trial
        min_response_time = 0  # minimum time before participants can press SPACE to move on


        ## Other

        cont = "\n\nPress space bar to continue"  # At the end of instructions slides
    TextComponent text_7
      text = "Welcome to this experiment!\n\nIn this task you will see four words in a sequence and you will have to remember them. Shortly after, you will be asked to repeat the words in the exact same order you saw them." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_10
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine display_words_training
    TextComponent wt1
      text [set every repeat] = $word1
      stopVal [duration (s)] = 0.200
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent wt2
      text [set every repeat] = $word2
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    TextComponent wt3
      text [set every repeat] = $word3
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent wt4
      text [set every repeat] = $word4
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 1.5
      letterHeight = 0.1
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    TextComponent memory_period
      stopVal [duration (s)] = $mem_per
      startVal [time (s)] = 1.7
      letterHeight = 0.1
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  Routine block_instr3
    TextComponent text_11
      text [set every repeat] = "You will now practice a few times before starting with the actual task."+ $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_15
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
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  Routine block_instr2
    TextComponent text_2
      text [set every repeat] = "In each trial, you will see four words flashed one after the other, and your task is to memorize them in the order they were presented. Immediately after the fourth word, you will have to " + $BlockInstructions + " until you hear a beep. At the beep, you will have to repeat the four words." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine repeat_training
    TextComponent text_5
      text = If you need more practice, press 'p'; if you are ready to start the actual experiment, press 's'.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'p','s'
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      End Routine:
        if key_resp_8.keys == "s": break  # allow to repeat training until ready (max 20, see loop)
Flow
  Routine instr_welcome
  Routine instr_exp1
  Routine instr_exp2
  Routine train
  LoopInitiator training_block loopType="TrialHandler"
    loopType = random
    nReps = 20
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    LoopInitiator word_presentation_training loopType="TrialHandler"
      conditionsFile = ..\conditions_training.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('item', 1), ('type', u'training'), ('word1', u'wait'), ('word2', u'bless'), ('word3', u'blush'), ('word4', u'sigh')]),
        OrderedDict([('item', 2), ('type', u'training'), ('word1', u'like'), ('word2', u'thank'), ('word3', u'stare'), ('word4', u'yell')]),
        OrderedDict([('item', 3), ('type', u'training'), ('word1', u'lick'), ('word2', u'ruin'), ('word3', u'chew'), ('word4', u'soothe')]),
        OrderedDict([('item', 4), ('type', u'training'), ('word1', u'save'), ('word2', u'look'), ('word3', u'stay'), ('word4', u'print')])]
      Routine fixation
      Routine display_words_training
      Routine repeat_words
    LoopTerminator word_presentation_training
    Routine repeat_training
  LoopTerminator training_block
  Routine instr_start_real_thing
  LoopInitiator experimental_blocks loopType="TrialHandler"
    conditionsFile = conditions_block_pilot.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('BlockType', u'CONTROL-PILOT'), ('SOA', 500), ('PresentTime', 100)]),
      OrderedDict([('BlockType', u'CONTROL-PILOT'), ('SOA', 500), ('PresentTime', 200)]),
      OrderedDict([('BlockType', u'CONTROL-PILOT'), ('SOA', 500), ('PresentTime', 300)]),
      OrderedDict([('BlockType', u'CONTROL-PILOT'), ('SOA', 750), ('PresentTime', 100)]),
      OrderedDict([('BlockType', u'CONTROL-PILOT'), ('SOA', 750), ('PresentTime', 200)]),
      OrderedDict([('BlockType', u'CONTROL-PILOT'), ('SOA', 750), ('PresentTime', 300)])]
    Routine block_instr
    LoopInitiator word_presentation loopType="TrialHandler"
      conditionsFile = ..\conditions_exp-trials_test.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('ItemID', 1), ('type', u'arm'), ('word1', u'peel'), ('word2', u'bash'), ('word3', u'chop'), ('word4', u'clap')]),
        OrderedDict([('ItemID', 2), ('type', u'arm'), ('word1', u'scratch'), ('word2', u'skim'), ('word3', u'grab'), ('word4', u'scrub')]),
        OrderedDict([('ItemID', 4), ('type', u'leg'), ('word1', u'hop'), ('word2', u'stomp'), ('word3', u'limp'), ('word4', u'skip')]),
        OrderedDict([('ItemID', 5), ('type', u'leg'), ('word1', u'stamp'), ('word2', u'scuff'), ('word3', u'leap'), ('word4', u'crawl')])]
      Routine fixation
      Routine display_words
      Routine repeat_words
    LoopTerminator word_presentation
    Routine end_block
  LoopTerminator experimental_blocks
  Routine thanks
