PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1920, 1200]
  Full-screen window = True
  expName = verb_norming
  Screen = 1
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Routines
  Routine beginning_blank
    TextComponent text_11
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_9
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instr_cont1
    TextComponent text_6
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        "First, you will rate each verb twice: once for its " + $firstrating + "-relatedness and once for its " +secondrating+ "-relatedness. Use the number keys 1 to 7 to indicate your rating. Lock in your answer by pressing return."+$cont
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0
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  Routine instr_cont2
    TextComponent text_4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        "After the ratings, you will be asked to choose the best Swedish translation from three alternatives. Use the keys 1, 2 or 3 to indicate your choice." +$cont
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0
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  Routine instr_cont3
    TextComponent text_10
      text = "If you have questions so far, you may ask the experimenter now.\n\nAre you ready to start?" +$cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine end_of_experiment
    TextComponent text_5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This is the end of this experiment.


        Thank you for participating!
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine blank
    TextComponent text_8
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine blank_long
    TextComponent text_9
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instr1
    TextComponent text_7
      text = "You will read a series of English verbs. For each word, you will be asked to indicate to what extent you associate the action expressed by the verb with your feet/legs and your hands/arms. For example, the action denoted by the verb WRITE is strongly associated with your hands/arms, but not at all with your feet/legs. A verb like KICK, on the other hand, denotes an action that is strongly related to your feet/legs but not at all to your hands/arms." +$cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0
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  Routine rating_trial
    TextComponent text
      text [set every repeat] = $category + "-relatedness\n\nHow " + $category_lowercase + "-related is the verb " + $word + "?"
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    RatingScaleComponent rating
      labels = 1,7
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
      scaleDescription = Not at all related                              Highly related
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  Routine intro
    CodeComponent code
      Begin Experiment:
        pptID = int(expInfo['participant'])  # participant ID

        # alternate between participants whether legs or arms ratings come first
        if pptID % 2 == 0:  # if even participant number
            armlegorder_file = 'arm_first.csv'
            firstrating = "hands/arms"
            secondrating = "feet/legs"
        else:
            armlegorder_file = 'leg_first.csv'
            firstrating = "feet/legs"
            secondrating = "hands/arms"

        # trials loop loads a random list for the translation task
        # define its path here
        path2stimuli = u'..\\stimuli\\presentation_lists_pilot\\p'
        list_norming_task = path2stimuli + `pptID` + '_norming.csv'

        ## Other
        cont = "\n\nPress space bar to continue"  # At the end of instructions slide
      End Routine:
        cont = "n\n\Press space bar to continue"
    TextComponent instr
      text = "Word Association Task \n\nWelcome and thank you for taking the time to participate!\nIn this experiment you will perform two tasks: a rating task and a translation task."+ $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0
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  Routine instructions_translations
    TextComponent instr_translations
      text = Choose the best translation out of the three options.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine translation
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        "What does " +$word+ " mean ?"
    KeyboardComponent answer
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1','2','3'
      startVal [time (s)] = 0.0
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    TextComponent word1
      text [set every repeat] = "1)  " + $w1
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent word2
      text [set every repeat] = "2)  " + $w2
      pos = (-0.2, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent word3
      text [set every repeat] = "3)  " + $w3
      pos = (-0.2, -0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine arm
    TextComponent text_2
      text [set every repeat] = "How arm-related is the word " + $word + "?"
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    RatingScaleComponent rating_2
      labels = 1,2,3,4,5,6,7
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
      scaleDescription = 1 = not at all arm-related                    7 = highly arm-related
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Flow
  Routine beginning_blank
  Routine intro
  Routine instr1
  Routine instr_cont1
  Routine instr_cont2
  Routine instr_cont3
  Routine blank_long
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $list_norming_task
    loopType = random
    nReps = 1
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    LoopInitiator ArmLeg_loop loopType="TrialHandler"
      conditionsFile = $armlegorder_file
      loopType = sequential
      nReps = 1
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      Routine rating_trial
      Routine blank
    LoopTerminator ArmLeg_loop
    Routine translation
    Routine blank_long
  LoopTerminator trials
  Routine end_of_experiment
