PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'please specify: 1 or 2!', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1920, 1200]
  Full-screen window = True
  expName = sheb_replication_1810
  Screen = 1
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Routines
  Routine display_words
    TextComponent w1
      text [set every repeat] = $word1
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent w2
      text [set every repeat] = $word2
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = $SOA
      letterHeight = 0.1
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    TextComponent w3
      text [set every repeat] = $word3
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = $SOA*2
      letterHeight = 0.1
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    TextComponent w4
      text [set every repeat] = $word4
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = $SOA*3
      letterHeight = 0.1
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    TextComponent memory_period
      stopVal [duration (s)] = $mem_per
      startVal [time (s)] = $SOA*3 + word_duration
      letterHeight = 0.1
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  Routine init_vars
    CodeComponent code
      Begin Experiment:
        ## Set global variables

        fix_point_duration = 1  # orig = 3

        word_duration = .1  # how long is each word shown for (orig = .1)
        SOA = .5  # stimulus onset asynchrony (orig = .5)

        mem_per = 2 # time during which words have to be kept in memory (orig = 6)

        max_response_time = 30  # max time to repeat words before moving to next trial
        min_response_time = 2  # minimum time before participants can press SPACE to move on
  Routine thanks
    TextComponent text
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        The experiment is over.

        Thank you for participating!
    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instr_welcome
    TextComponent text_7
      text = "Welcome to this experiment!\n\nIn this task you will see four words in a sequence and you will have to remember them. Shortly after, you will be asked to repeat the words in the exact same sequence." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_10
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_TryItOut2
    TextComponent text_13
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Each trial starts with a fixation point. Immediately after that, you will see four words flashed one after the other in the centre of the screen. Your task is to memorize them in the exact order they were presented. After the fourth word, remain silent until you hear a beep. At the beep, you have to repeat the four words.

        Do you have any questions so far?

        If not, press space bar to start the practice trials
    KeyboardComponent key_resp_16
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_start_real_thing
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Ready?

        Press space bar to start
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine block_instr
    CodeComponent code_4
      Begin Routine:
        myBlockCount += 1

        curr_ppt_block = "p" + `pptID` + "_b" + `myBlockCount`
        print(curr_ppt_block)

        curr_list_training = path2stimuli + curr_ppt_block + '_training.csv'
        print(curr_list_training)

        curr_list_targets = path2stimuli + curr_ppt_block + '_targets.csv'
        print(curr_list_targets)
    TextComponent block_intro
      text [set every repeat] = "Part " + `$myBlockCount` + "\n\nYou will see four words flashed one after the other and your have to memorize them in the order they were presented.\n\nThis time, immediately after the fourth word, you will have to " + $BlockInstructions + " until you hear a beep. At the beep, you have to repeat the four words." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine repeat_words
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = $min_response_time
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    SoundComponent sound_2
      sound = 880
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 0
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  Routine repeat_training
    TextComponent text_5
      text = If you need more practice, press 'p'; if you are ready to start the actual experiment, press 's'.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'p','s'
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      End Routine:
        if key_resp_8.keys == "s": break  # allow to repeat training until ready (max 20, see loop)
  Routine end_block
    TextComponent text_6
      text [set every repeat] = "End of part " + `$myBlockCount` + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_TryItOut
    TextComponent text_12
      text = "Let's do some practice trials right away so you can get acquainted with the basic task." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_14
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
    PolygonComponent point
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.035, 0.05)
      fillColor = $[1,1,1]
      nVertices = 999
      stopVal [duration (s)] = $fix_point_duration
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  Routine instr_exp1
    TextComponent text_8
      text = "It works like this:\n\nYou see four words presented on the screen one after another, followed by a pause during which you have to keep the four words in memory in the exact order they were presented. You will then hear a beep. At the beep, you have to repeat the four words out loud. Your voice will be recorded as you repeat the words." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_11
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_exp2
    TextComponent text_9
      text = "Okay, now you are acquainted with the basic memory task.\n\nThe actual experiment has two parts. In each part, you will be asked to memorize groups of four words (as you just did), but you will also carry out different rhythmic exercises with your hands or feet while having to keep the words in memory. The experimenter is going to provide detailed instructions and you will have plenty of time to practice." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_12
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_exp3
    TextComponent text_10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        "You will be able to take a break at the end of each part. You can also take a break between trials if needed.\n\nIf you have questions so far, you may ask the experimenter now." + $cont
    KeyboardComponent key_resp_13
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine train
    TextComponent text_4
      text [set every repeat] = "Now you will first do some practice trials before starting the real task." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine block_instr2
    TextComponent text_2
      text [set every repeat] = "In each trial, you will see four words flashed one after the other, and your task is to memorize them in the order they were presented. Immediately after the fourth word, you will have to " + $BlockInstructions + " until you hear a beep. At the beep, you will have to repeat the four words." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine block_instr3
    TextComponent text_11
      text [set every repeat] = "The experimenter will now explain to you the rhythmic pattern you have to perform with your " + $Effector + ". You will get plenty of practice before starting with the actual task."
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_15
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
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  Routine training
  Routine trial
  Routine blank_initialize
    CodeComponent code_5
      Begin Experiment:
        ## Set global (experiment-level) variables

        pptID = int(expInfo['participant'])  # participant ID
        print("participant ID is " + `pptID`)

        sess = int(expInfo['session'])  # session converted to int

        myBlockCount = 0  # count blocks to use in text displays

        path2stimuli = u'stimuli\\presentation_lists\\'
        print(path2stimuli)

        ## Duration-related variables (set here rather than in individ elements)

        # If session = 9, then speed through the screens
        if sess == 9:
            fix_point_duration = .05  # orig = 3
            word_duration = .1  # how long is each word shown for (orig = .1)
            SOA = .15  # stimulus onset asynchrony (orig = .5)
            mem_per = .05 # time during which words have to be kept in memory (orig = 6)
        else:  # otherwise use the standard duration
            fix_point_duration = 3  # orig = 3
            word_duration = .1  # how long is each word shown for (orig = .1)
            SOA = .5  # stimulus onset asynchrony (orig = .5)
            mem_per = 6 # time during which words have to be kept in memory (orig = 6)

        max_response_time = 120  # max time to repeat words before moving to next trial
        min_response_time = 0  # minimum time before participants can press SPACE to move on


        ## Other

        cont = "\n\nPress space bar to continue"  # At the end of instructions slides
    TextComponent text_14
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_17
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine blank_initialize
  Routine instr_welcome
  Routine instr_exp1
  Routine instr_TryItOut
  Routine instr_TryItOut2
  LoopInitiator practice_block loopType="TrialHandler"
    loopType = random
    nReps = 10
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    LoopInitiator word_presentation_practice loopType="TrialHandler"
      conditionsFile = practice_test.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('item', 1), ('type', u'training'), ('word1', u'wait'), ('word2', u'sigh'), ('word3', u'blush'), ('word4', u'bless')]),
        OrderedDict([('item', 2), ('type', u'training'), ('word1', u'like'), ('word2', u'yell'), ('word3', u'thank'), ('word4', u'stare')]),
        OrderedDict([('item', 3), ('type', u'training'), ('word1', u'chew'), ('word2', u'lick'), ('word3', u'soothe'), ('word4', u'ruin')]),
        OrderedDict([('item', 4), ('type', u'training'), ('word1', u'look'), ('word2', u'stay'), ('word3', u'save'), ('word4', u'print')])]
      Routine fixation
      Routine display_words
      Routine repeat_words
    LoopTerminator word_presentation_practice
    Routine repeat_training
  LoopTerminator practice_block
  Routine instr_exp2
  Routine instr_exp3
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = conditions_block.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('BlockType', u'CONTROL'), ('BlockInstructions', u'wait silently'), ('BlockPrompt', u'(remain silent)')]),
      OrderedDict([('BlockType', u'ARM'), ('BlockInstructions', u'perform a simple drumming exercise with your arms'), ('BlockPrompt', u'(arm paradiddle)')]),
      OrderedDict([('BlockType', u'LEGS'), ('BlockInstructions', u'perform a simple drumming exercise with your legs'), ('BlockPrompt', u'(leg paradiddle)')]),
      OrderedDict([('BlockType', u'ARTICULATION'), ('BlockInstructions', u'repeat the syllable "bla" continuously'), ('BlockPrompt', u'(repeat "bla")')])]
    Routine block_instr
    Routine block_instr3
    Routine train
    LoopInitiator training_block loopType="TrialHandler"
      loopType = random
      nReps = 20
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      LoopInitiator word_presentation_training loopType="TrialHandler"
        conditionsFile = training_test.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('item', 1), ('type', u'training'), ('word1', u'wait'), ('word2', u'sigh'), ('word3', u'blush'), ('word4', u'bless')]),
          OrderedDict([('item', 2), ('type', u'training'), ('word1', u'like'), ('word2', u'yell'), ('word3', u'thank'), ('word4', u'stare')]),
          OrderedDict([('item', 3), ('type', u'training'), ('word1', u'chew'), ('word2', u'lick'), ('word3', u'soothe'), ('word4', u'ruin')]),
          OrderedDict([('item', 4), ('type', u'training'), ('word1', u'look'), ('word2', u'stay'), ('word3', u'save'), ('word4', u'print')])]
        Routine fixation
        Routine display_words
        Routine repeat_words
      LoopTerminator word_presentation_training
      Routine repeat_training
    LoopTerminator training_block
    Routine instr_start_real_thing
    LoopInitiator word_presentation loopType="TrialHandler"
      conditionsFile = targets_test.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('item', 17), ('type', u'leg'), ('word1', u'kick'), ('word2', u'jog'), ('word3', u'run'), ('word4', u'flee')]),
        OrderedDict([('item', 2), ('type', u'arm'), ('word1', u'switch'), ('word2', u'rub'), ('word3', u'dunk'), ('word4', u'chop')]),
        OrderedDict([('item', 3), ('type', u'arm'), ('word1', u'brush'), ('word2', u'bind'), ('word3', u'fold'), ('word4', u'lift')]),
        OrderedDict([('item', 5), ('type', u'arm'), ('word1', u'hack'), ('word2', u'stab'), ('word3', u'scratch'), ('word4', u'clean')]),
        OrderedDict([('item', 13), ('type', u'leg'), ('word1', u'tiptoe'), ('word2', u'hike'), ('word3', u'tread'), ('word4', u'wade')]),
        OrderedDict([('item', 10), ('type', u'leg'), ('word1', u'stride'), ('word2', u'limp'), ('word3', u'mount'), ('word4', u'hop')]),
        OrderedDict([('item', 16), ('type', u'leg'), ('word1', u'stumble'), ('word2', u'glide'), ('word3', u'creep'), ('word4', u'stomp')]),
        OrderedDict([('item', 1), ('type', u'arm'), ('word1', u'peel'), ('word2', u'pull'), ('word3', u'pat'), ('word4', u'braid')]),
        OrderedDict([('item', 18), ('type', u'leg'), ('word1', u'slip'), ('word2', u'leap'), ('word3', u'skate'), ('word4', u'stray')]),
        OrderedDict([('item', 11), ('type', u'leg'), ('word1', u'dance'), ('word2', u'skip'), ('word3', u'pace'), ('word4', u'strut')]),
        OrderedDict([('item', 12), ('type', u'leg'), ('word1', u'stroll'), ('word2', u'walk'), ('word3', u'step'), ('word4', u'jump')])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
      Routine fixation
      Routine display_words
      Routine repeat_words
    LoopTerminator word_presentation
    Routine end_block
  LoopTerminator block
  Routine thanks
