PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1280, 720]
  Full-screen window = True
  expName = verb_norming_L1-eng_no-translation
  Screen = 1
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Routines
  Routine Instr_cont1
  Routine end_of_experiment
    TextComponent text_9
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This is the end of this experiment.


        Thank you for participating!
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine beginning_blank
    CodeComponent code
      Begin Experiment:
        pptID = int(expInfo['participant'])  # participant ID

        # alternate between participants whether legs or arms ratings come first
        if pptID % 2 == 0: # if even participant number
            armlegorder_file = 'rating_arm_first.csv'
            firstrating = "hand/arm"
            secondrating = "foot/leg"
        else:
            armlegorder_file = 'rating_leg_first.csv'
            firstrating = "foot/leg"
            secondrating = "hand/arm"

        # trial loop loads a random list for the translation task
        # define its path here
        #path2stimuli = u'..\\stimuli\\presentation_lists_pilot\\p'
        #list_norming_task = path2stimuli + `pptID` + '_norming.csv'

        ## Other
        cont = "\n\nPress space bar to continue"  # At the end of instruction slide
    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_4
    TextComponent text_4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        If you have questions so far, you may ask the experimenter now.

        If not, press space bar to start
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rating_trial
    TextComponent text_10
      text [set every repeat] = $category + "-relatedness\n\nHow " + $category_lowercase + "-related is the verb " + $verb + "?"
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    RatingScaleComponent rating
      labels = 1,7
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
      scaleDescription = Not at all related                                     Strongly related
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  Routine intro
    TextComponent introtext
      text = "Word Association Task \n\nIn this task you will have to rate verbs along two dimensions."+ $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blank_long
    TextComponent text_5
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine blank
    TextComponent short_blank
      stopVal [duration (s)] = .2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine b'blank_long_3'
    TextComponent text_8
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine b'blank_long_2'
    TextComponent text_6
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instr_1
    TextComponent text
      text = "You will read a series of verbs. For each one, you will be asked to indicate to what extent you associate the action expressed by the verb with your feet/legs and your hands/arms. For example, the action denoted by the verb WRITE is strongly associated with your hands/arms, but not with your feet/legs. A verb like KICK, on the other hand, denotes an action that is strongly related to your feet/legs but not to your hands/arms." +$cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_2
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        "You will rate each verb twice: once for its " + $firstrating + "-relatedness and once for its " +secondrating+ "-relatedness. Indicate your choice by clicking on the rating scale 1 to 7. Lock in your answer by clicking the button beneath the scale."+$cont
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine beginning_blank
  Routine intro
  Routine instr_1
  Routine instr_2
  Routine instr_4
  Routine blank_long
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli\english-targets_norming.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('type', u'arm'), ('verb', u'BRUSH')]),
      OrderedDict([('type', u'arm'), ('verb', u'CARVE')]),
      OrderedDict([('type', u'arm'), ('verb', u'CATCH')]),
      OrderedDict([('type', u'arm'), ('verb', u'CHOP')]),
      OrderedDict([('type', u'arm'), ('verb', u'CLAP')]),
      OrderedDict([('type', u'arm'), ('verb', u'CLEAN')]),
      OrderedDict([('type', u'arm'), ('verb', u'CLICK')]),
      OrderedDict([('type', u'arm'), ('verb', u'CUT')]),
      OrderedDict([('type', u'arm'), ('verb', u'DIG')]),
      OrderedDict([('type', u'arm'), ('verb', u'FOLD')]),
      OrderedDict([('type', u'arm'), ('verb', u'GESTURE')]),
      OrderedDict([('type', u'arm'), ('verb', u'GRAB')]),
      OrderedDict([('type', u'arm'), ('verb', u'GRASP')]),
      OrderedDict([('type', u'arm'), ('verb', u'GRIP')]),
      OrderedDict([('type', u'arm'), ('verb', u'HACK')]),
      OrderedDict([('type', u'arm'), ('verb', u'HUG')]),
      OrderedDict([('type', u'arm'), ('verb', u'KNOCK')]),
      OrderedDict([('type', u'arm'), ('verb', u'NIP')]),
      OrderedDict([('type', u'arm'), ('verb', u'PAT')]),
      OrderedDict([('type', u'arm'), ('verb', u'PEEL')]),
      OrderedDict([('type', u'arm'), ('verb', u'PINCH')]),
      OrderedDict([('type', u'arm'), ('verb', u'PLUCK')]),
      OrderedDict([('type', u'arm'), ('verb', u'POKE')]),
      OrderedDict([('type', u'arm'), ('verb', u'POLISH')]),
      OrderedDict([('type', u'arm'), ('verb', u'PULL')]),
      OrderedDict([('type', u'arm'), ('verb', u'PUNCH')]),
      OrderedDict([('type', u'arm'), ('verb', u'PUSH')]),
      OrderedDict([('type', u'arm'), ('verb', u'RUB')]),
      OrderedDict([('type', u'arm'), ('verb', u'SCOOP')])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
    LoopInitiator armleg_loop loopType="TrialHandler"
      conditionsFile = $armlegorder_file
      loopType = sequential
      nReps = 1
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      Routine rating_trial
      Routine blank
    LoopTerminator armleg_loop
    Routine blank_long
  LoopTerminator trials
  Routine end_of_experiment
