PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = sheb_replic_180522
  Screen = 1
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Routines
  Routine end_block
    TextComponent text_6
      text [set every repeat] = "This is the end of part " + `$myBlockCount` + " of the experiment.\n\nPress SPACE BAR to continue."
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine display_words
    TextComponent w1
      text [set every repeat] = $word1
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent w2
      text [set every repeat] = $word2
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = $SOA
      letterHeight = 0.1
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    TextComponent w3
      text [set every repeat] = $word3
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = $SOA*2
      letterHeight = 0.1
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    TextComponent w4
      text [set every repeat] = $word4
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = $SOA*3
      letterHeight = 0.1
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    TextComponent memory_period
      stopVal [duration (s)] = $mem_per
      startVal [time (s)] = $SOA*3 + word_duration
      letterHeight = 0.1
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  Routine training
  Routine init_vars
    CodeComponent code
      Begin Experiment:
        ## Set global variables

        fix_point_duration = 1  # orig = 3

        word_duration = .1  # how long is each word shown for (orig = .1)
        SOA = .5  # stimulus onset asynchrony (orig = .5)

        mem_per = 2 # time during which words have to be kept in memory (orig = 6)

        max_response_time = 30  # max time to repeat words before moving to next trial
        min_response_time = 2  # minimum time before participants can press SPACE to move on
  Routine trial
  Routine fixation
    PolygonComponent point
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.035, 0.05)
      fillColor = $[1,1,1]
      nVertices = 999
      stopVal [duration (s)] = $fix_point_duration
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  Routine instr_exp1
    TextComponent text_8
      text [set every repeat] = "It works as follows:\n\nYou see four words presented one after another on the screen, followed by a pause during which you have to keep the four words in memory in the exact order they were presented. You will then hear a beep. At the beep, you have to repeat the four words out loud." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_11
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_exp2
    TextComponent text_9
      text [set every repeat] = "The experiment is divided into four parts. In each part, you will be asked to memorize the words while doing different exercises. You will either have to wait silently, perform a rhythmic pattern with your hands or with your feet, or repeat the syllable 'bla'. At the beginning of each part you will receive detailed instructions from the experimenter and you will have plenty of time to practice." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_12
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine block_instr
    CodeComponent code_4
      Begin Routine:
        myBlockCount += 1
        print("Block " + `myBlockCount`)

        curr_list = "p" + `pptID` + "b" + `myBlockCount`
        print(curr_list)
    TextComponent block_intro
      text [set every repeat] = "Part " + `$myBlockCount` + "\n\nBlock type: " + $BlockType + "\n\nReady?\n\nThen press SPACE BAR!"
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine repeat_words
    MicrophoneComponent mic_1
      stereo = False
      stopVal [duration (s)] = $max_response_time
      startVal [time (s)] = 0.0
    KeyboardComponent key_resp_2
      stopVal [duration (s)] = $max_response_time
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = $min_response_time
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    SoundComponent sound_2
      sound = 880
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 0
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  Routine instr_start_real_thing
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Okay, you will now begin the actual task.

        Press SPACE BAR when ready
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine train
    TextComponent text_4
      text [set every repeat] = "You will start a training phase now." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent text
      text = Thank you for participating!
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 10
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instr_welcome
    CodeComponent code_2
      Begin Experiment:
        ## Set global (experiment-level) variables

        pptID = int(expInfo['participant'])  # participant ID
        print("participant ID is " + `pptID`)

        sess = int(expInfo['session'])  # session converted to int

        myBlockCount = 0  # count blocks to use in text displays

        path2stimuli = "stimuli/presentation_lists/"
        print(path2stimuli)

        ## Duration-related variables (set here rather than in individ elements)

        # If session = 9, then speed through the screens
        if sess == 9:
            fix_point_duration = .1  # orig = 3
            word_duration = .1  # how long is each word shown for (orig = .1)
            SOA = .2  # stimulus onset asynchrony (orig = .5)
            mem_per = .1 # time during which words have to be kept in memory (orig = 6)
        else:  # otherwise use the standard duration
            fix_point_duration = 3  # orig = 3
            word_duration = .1  # how long is each word shown for (orig = .1)
            SOA = .5  # stimulus onset asynchrony (orig = .5)
            mem_per = 6 # time during which words have to be kept in memory (orig = 6)

        max_response_time = 120  # max time to repeat words before moving to next trial
        min_response_time = 0  # minimum time before participants can press SPACE to move on


        ## Other

        cont = "\n\nPress space bar to continue"  # At the end of instructions slides
    TextComponent text_7
      text [set every repeat] = "Welcome to this experiment!\n\nIn this task you will see four words in a sequence and you will have to remember them. Shortly after, you will be asked to repeat the words in the exact same sequence." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_10
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine block_instr2
    TextComponent text_2
      text [set every repeat] = "In this block, you will have to " + $BlockInstructions + " while you keep the words in memory.\n\nThe experimenter will explain the details now and you will get some practice before starting."
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine repeat_training
    TextComponent text_5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        If you need more training, press 't';
        To start the actual experiment, press 's'.
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 't','s'
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      End Routine:
        if key_resp_8.keys == "s": break  # allow to repeat training until ready (max 10, see loop)
Flow
  Routine instr_welcome
  Routine instr_exp1
  Routine instr_exp2
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = conditions_block.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('BlockType', u'CONTROL'), ('BlockInstructions', u'wait silently'), ('BlockPrompt', u'(remain silent)')]),
      OrderedDict([('BlockType', u'ARM'), ('BlockInstructions', u'perform a simple drumming exercise with your arms'), ('BlockPrompt', u'(arm paradiddle)')]),
      OrderedDict([('BlockType', u'LEGS'), ('BlockInstructions', u'perform a simple drumming exercise with your legs'), ('BlockPrompt', u'(leg paradiddle)')]),
      OrderedDict([('BlockType', u'ARTICULATION'), ('BlockInstructions', u'repeat the syllable "bla" continuously'), ('BlockPrompt', u'(repeat "bla")')])]
    Routine block_instr
    Routine block_instr2
    Routine train
    LoopInitiator training_block loopType="TrialHandler"
      loopType = random
      nReps = 10
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      LoopInitiator word_presentation_training loopType="TrialHandler"
        conditionsFile = conditions_training.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('item', 1), ('type', u'training'), ('word1', u'wait'), ('word2', u'bless'), ('word3', u'blush'), ('word4', u'sigh')]),
          OrderedDict([('item', 2), ('type', u'training'), ('word1', u'like'), ('word2', u'thank'), ('word3', u'stare'), ('word4', u'yell')]),
          OrderedDict([('item', 3), ('type', u'training'), ('word1', u'lick'), ('word2', u'ruin'), ('word3', u'chew'), ('word4', u'soothe')]),
          OrderedDict([('item', 4), ('type', u'training'), ('word1', u'save'), ('word2', u'look'), ('word3', u'stay'), ('word4', u'print')])]
        Routine fixation
        Routine display_words
        Routine repeat_words
      LoopTerminator word_presentation_training
      Routine repeat_training
    LoopTerminator training_block
    Routine instr_start_real_thing
    LoopInitiator word_presentation loopType="TrialHandler"
      conditionsFile = conditions_exp-trials_allitems_test.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('item', 1), ('type', u'arm'), ('word1', u'pull'), ('word2', u'pat'), ('word3', u'peel'), ('word4', u'braid')]),
        OrderedDict([('item', 2), ('type', u'arm'), ('word1', u'dunk'), ('word2', u'switch'), ('word3', u'chop'), ('word4', u'rub')]),
        OrderedDict([('item', 3), ('type', u'arm'), ('word1', u'lift'), ('word2', u'fold'), ('word3', u'brush'), ('word4', u'bind')]),
        OrderedDict([('item', 4), ('type', u'arm'), ('word1', u'grasp'), ('word2', u'grip'), ('word3', u'seize'), ('word4', u'catch')]),
        OrderedDict([('item', 5), ('type', u'arm'), ('word1', u'stab'), ('word2', u'clean'), ('word3', u'hack'), ('word4', u'scratch')]),
        OrderedDict([('item', 6), ('type', u'arm'), ('word1', u'wash'), ('word2', u'carve'), ('word3', u'stir'), ('word4', u'bash')]),
        OrderedDict([('item', 7), ('type', u'arm'), ('word1', u'dig'), ('word2', u'nip'), ('word3', u'scrub'), ('word4', u'knock')]),
        OrderedDict([('item', 8), ('type', u'arm'), ('word1', u'grab'), ('word2', u'click'), ('word3', u'wipe'), ('word4', u'clap')]),
        OrderedDict([('item', 9), ('type', u'arm'), ('word1', u'throw'), ('word2', u'whip'), ('word3', u'toss'), ('word4', u'scrape')]),
        OrderedDict([('item', 10), ('type', u'leg'), ('word1', u'limp'), ('word2', u'mount'), ('word3', u'hop'), ('word4', u'stride')]),
        OrderedDict([('item', 11), ('type', u'leg'), ('word1', u'strut'), ('word2', u'skip'), ('word3', u'dance'), ('word4', u'pace')])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
      Routine fixation
      Routine display_words
      Routine repeat_words
    LoopTerminator word_presentation
    Routine end_block
  LoopTerminator block
  Routine thanks
